\
\ ************************
\ *                      *
\ *   SF_COKED_FR or PR  *
\ *                      *
\ ************************
\ Scott Ng-Evans (2013)
\ Based on RP_COKED_FR (2009)
\ Methods modified from:
\           Prefrontal synaptic markers of cocaine addiction-like behavior
\           in rats. F Kasanetz, M Lafourcade, V Deroche-Gamonet, J-M Revest,
\           N Berson, E Balado, J-F Fiancette, P Renault, P-V Piazza and OJ Manzoni.
\           Molecular Psychiatry (2012), 1-9.
\
\
\                 Basic training protocol: The daily SA session was composed
\                 of three drug components (40 min each) separated by 15 min
\                 drug free periods. "Drug" periods were signaled by the blue
\                 cue light, while the "no-drug" periods were signaled by
\                 illumination of the entire SA box and extinction of the blue
\                 cue light. During the "no-drug" periods, nose pokes were without
\                 scheduled consequences. During the "drug" periods, introduction
\                 of the animal's nose into one hole (active device) turned on the
\                 white cue light located above it and then, 1 sec later, switched
\                 on the infusion pump. The cue light remained on for a total of 4
\                 sec. Nose pokes into the other hole (inactive device) had no
\                 scheduled consequences. The self-infusion volume was 0.5 ?L (2 sec
\                 infusion) and contained 2 µg/g of cocaine. Each infusion was followed
\                 by a 40 sec time-out period. During the first 5 days, an FR1 schedule
\                 of reinforcement (i.e. one nose poke resulted in an infusion of 2 µg/g
\                 of cocaine) was applied. Then, the FR was first increased to 3 (1 to 2
\                 sessions) and finally to 5 for the rest of the experiment. Criterion
\                 for acquisition of cocaine SA was defined by a stable number of
\                 self-infusions over at least three consecutive SA sessions (+/-10%).
\
\
\ MODIFIED FROM SF_COKED_FR
\ Methods from Kasanetz paper above:
\
\                Progressive-ratio schedule: The ratio of responses per infusion was
\                increased after each infusion according to the following progression
\                (10, 20, 30, 45, 65, 85, 115, 145, 185, 225, 275, 325, 385, 445, 515, 585,
\                665, 745, 835, 925, 1025, 1125, 1235, 1345, 1465, 1585), the last ratio
\                completed, called the breakpoint, was used to measure motivation for cocaine.
\                The session ceased after either 5 hours or when a period of 1 hour had
\                elapsed since the previously earned infusion.
\
\

\
\
\ Revisions:
\
\
\           7 - 2009 - Added head entry detection as requested by Ben Whiddon
\
\           9 - 2013 - Kerry Kerstetter: "The program should have 3 – 40minute
\                      periods of drug self administration and each of these periods
\                      should be followed by a 15minute period with no drug available.
\                      Total session time would be 165minutes. However when running
\                      the program we noticed that the session was ending early
\                      because it was missing the last drug free 15minute period.
\                      Could you double check/edit the program for us to include
\                      the last 15m drug free period?...
\                      For ease of use,  could we also have a data display for
\                      total session time? Currently, the program displays number
\                      of Active Left Lever Responses and Receptacle Head Entries,
\                      For ease of use,  could we also have a data display for total
\                      session time? Currently, the program displays number of Active
\                      Left Lever Responses and Receptacle Head Entries, neither of
\                      which will be necessary for the experiment. Could you remove these?"
\
\          6 - 2014 - Lindsay Yager: "Self-Administration on an FR schedule: Rats will be
\                     trained to lever press for I.V. infusions of cocaine
\                     (0.75 mg/kg/infusion, 50 μl delivered over 2.8 sec).
\                     The beginning of the session will be indicated by insertion
\                     of both levers into the chamber. Each cocaine infusion
\                     will coincide with illumination of a the cue light above the lever
\                     for 20 sec during which time responses will not result in additional
\                     cocaine delivery (infusion should start when cue light turns on).
\                     Inactive responses will be without consequence. For the first 2
\                     sessions cocaine will be available on a FR1 schedule. For sessions 3-4,
\                     cocaine will be available on a FR3 schedule. Following session 4, cocaine
\                     will be available during each self-administration session on a FR5 schedule.
\                     These self-administration sessions will be terminated after a maximum of 20
\                     infusions or after 3 hr, whichever occurs first. The end of the session will
\                     be indicated by retraction of the levers. No houselight will be illuminated
\                     during these sessions. Thus, I will either need 1 program where I can change
\                     the variable for the FR or three programs with FR1, FR3, and FR5. I won't need
\                     one of your extraction programs for this data- just displaying the number of
\                     infusions earned, active lever presses, inactive lever presses, and time to
\                     session completion on the screen will be enough."
\
\
\         5 - 2015 - Lindsay Yager: "I need a program for a cue-induced reinstatement test.
\                    Basically I want a 2 hr session during which a response
\                    on the active lever results in presentation of the cue
\                    light for 4 seconds, but no drug infusion. I already modified
\                    the program from the spiking program you made for me that does
\                    almost everything I want it to (only one drug available period
\                    that is 2 hours long and completion of the FR, in this case 1
\                    lever press, results in presentation of the cue light for 4
\                    seconds but no drug infusion). However, at the beginning of the session
\                    when the levers are extended into the chamber I want the cue light to
\                    turn on for 10 seconds and for active and inactive responses to be recorded
\                    during this time but to have no effect (i.e., the cue light doesn't stay
\                    on longer because they pressed the lever during this 10 second period)."
\
\                    Program changed to "2 hr_Cue_Reinstatement_Left", pre-session cue period added
\                    before session start.
\                    Added houselight option for pre-session period.
\                    Changed cue light state set to reflect pre-session period.
\                    Added option to record or not record head entries in food tray as this seemed
\                    to be removed from the program previously.
\
\
\           6 - 2024 - Alex Whitebirch: "The relevant TTLs to encode here would be the
\                      initiation of the 1 hour trial, time stamps for each active or
\                      inactive lever press, and a time stamp for the end of the trial."
\
\                    - Added missed infusion TTL
\
\
\                   - This is AW_Cue_Reinstatement_Right_TTL and AW_Cue_Reinstatement_Left_TTL
\
\
\
\
\
\           7 - 2024 - Corrected starting ratio from 5 to 1
\                    - Added Z-pulse TTL state sets that were inadvertently left off
\
\
\
\
\\
\

\
\
\ Input Constants

^LeftLeverIn  = 1
^RightLeverIn = 3
^HeadEntry    = 5


\ Output Constants (NOTE: Lever refers to extending or retracting)

^LeftLeverOut   = 1
^RightLeverOut  = 2
^Feeder         = 3
^LeftCueLight   = 4
^RightCueLight  = 5
^HouseLight     = 7
^Sonalert       = 8
^Syringepump    = 9
^Fan            = 10
^GreenLight     = 11
^Shock          = 12


^StartSession_TTL        = 17
^ActivePress_TTL         = 20
^InactivePress_TTL       = 21
^MissedDrugInfusion_TTL  = 22
^EndSession_TTL          = 23



\ Z-Pulses
\
\ Z1 time-out over, drug available and drug period starts
\ Z2 drug delivery initiation
\ Z3 no-drug period starts
\ Z4 end of pre-session cue period, start regular session



\ Variable Definitions:

\ A(0)  = Active lever (0:right 1:left)
\ A(1)  = Number of drug periods
\ A(2)  = Length of drug periods (min)
\ A(3)  = Length of no-drug periods (min)
\ A(4)  = Drug infusion time (sec)
\ A(5)  = Post-infusion time-out length (sec)
\ A(6)  = Tally for number of drug periods
\ A(7)  = Switch for ending session when number of drug periods reached
\ A(8)  = Inter-infusion time limit; max time allowed between infusions before PR ends  **** NOT USED IN FR ***
\ A(9)  = Inter-infusion timer (1-second resolution)   **** NOT USED IN FR ****
\ A(10) = Active right presses
\ A(11) = Active left presses
\ A(12) = Inactive right presses
\ A(13) = Inactive left presses
\ A(14) = Variable for countdown of drug and no-drug period to display
\ A(15) = Max session length in hours
\ A(16) = Food tray head entries
\ A(17) = Break point time-limit in minutes, when enough time elapses
\          since last response to end session and record break point
\ A(18) = Holds initial value of X because X changes
\ A(19) = Holds last ratio for break point
\ A(20) = Holds breakpoint; zero before break point reached
\ A(21) = Holds number of right presses in drug period
\ A(22) = Holds number of left presses in drug period
\ A(23) = Holds number of right presses in no-drug period
\ A(24) = Holds number of left presses in no-drug period
\ A(25) = Session time displayed in minutes
\ A(26) = Dummy variable for Wizard first-line bug
\ A(27) = Dummy variabe for menu display
\ A(28) = Maximum number of drug infusions to end session
\ A(29) = Houselight during the drug session (0:off 1:on)
\ A(30) = Houselight for no-drug periods (0:off 1:on)
\ A(31) = Length of pre-session cue period (seconds)
\ A(32) = Number of pre-session cue period right presses
\ A(33) = Number of pre-session cue period left presses
\ A(34) = Detect head entries? (0:no  1:yes)
\ A(35) = Houselight during pre-session period (0:off 1:on)
\
\ B = List of progressive ratios
\
\ C(0) = Subscript for advancing in B list
\
\ D = event time stamp
\ E = event identity stamp
\       3  - Right active FR press
\       4  - Left active FR press
\       5  - Infusion start
\       6  - Infusion end
\       7  - Food tray head entry
\       8  - Right inactive press during FR
\       9  - Left inactive press during FR
\      10  - Right lever extends
\      11  - Left lever extends
\      34  - Right press during infusion and time-out period
\      35  - Left press during infusion and time-out period
\      36  - Right press in no-drug period
\      37  - Left press in no-drug period
\      38  - Right lever cue light on
\      39  - Left lever cue light on
\      40  - Right lever cue light off
\      41  - Left lever cue light off
\      42  - Houselight on
\      43  - Houselight off
\      44  - Drug period starts
\      45  - No-drug period starts
\      46  - Pre-session cue period starts
\      47  - Pre-session cue period ends
\      48  - Pre-session cue period right press
\      49  - Pre-session cue period left press
\     100  - End session marker
\
\ F = FR countdown variable for right
\ G = Event counter
\ H = Session timer
\ U = FR countdown variable for left
\
\ X = fixed ratio
\ Y = number of reinforcers (infusions)


DIM A = 50
DIM C = 10
DIM D = 50000
DIM E = 50000

LIST B = 10, 20, 30, 45, 65, 85, 115, 145, 185, 225, 275, 325, 385, 445, 515, 585, 665, 745, 835, 925, 1025, 1125, 1235, 1345, 1465, 1585



VAR_ALIAS -------------------------------------------------------------------- = A(26)
VAR_ALIAS Max session length(hour) = A(15)
VAR_ALIAS Max number of drug infusions = A(28)
VAR_ALIAS Fixed Ratio or PR (PR:-1) = X
VAR_ALIAS PR break pnt time-limit(min) = A(17)
VAR_ALIAS Active lever (0:right 1:left) = A(0)
VAR_ALIAS Detect headentries (0:No 1:Yes) = A(34)
VAR_ALIAS Houselight for pre-session cue period (0:off 1:on) = A(35)
VAR_ALIAS Houselight for drug periods (0:off 1:on) = A(29)
VAR_ALIAS Houselight for no-drug periods (0:off 1:on) = A(30)
VAR_ALIAS Number of drug periods(minimum 1) = A(1)
VAR_ALIAS Length of drug periods(min) = A(2)
VAR_ALIAS Length of no-drug periods(min) = A(3)
VAR_ALIAS Length pre-session cue period(sec) = A(31)
VAR_ALIAS Drug infusion time(sec 0:no infusion) = A(4)
VAR_ALIAS Post-inf time-out length(sec) = A(5)
VAR_ALIAS ------------------------------------------------------------------- = A(27)



S.S.1,  \ Default set-up, drug/no-drug switching
  S1,
      0": SET A(0)  = 0;      \ Active lever (0:Right, 1:Left)
          SET A(1)  = 1;      \ Number of drug periods (minumum = 1)
          SET A(2)  = 121;    \ Length of drug periods in minutes
          SET A(3)  = 0;      \ Length of no-drug periods in minutes
          SET A(4)  = 2.8;    \ Drug infusion time in seconds, 0 for no infusion
          SET A(5)  = 4;      \ Post-infusion time-out length in seconds
          SET A(15) = 1;      \ Maximum session length in hours
          SET A(17) = 60;     \ Progressive ratio (PR) break point time limit in minutes (if PR used - see X)
          SET A(28) = 200;    \ Maximum number of drug infusions
          SET A(29) = 0;      \ Houselight on or off for drug periods (0:Off, 1:On)
          SET A(30) = 1;      \ Houselight on or off for no-drug periods (0:off 1: on)
          SET A(31) = 10;     \ Length of pre-session cue period in seconds
          SET A(34) = 0;      \ Detect headentries (0:No 1:Yes)
          SET A(35) = 0;      \ Houselight during pre-session period (0:off 1:on)
          SET X     = 1;      \ Fixed ratio (if this is -1, a progressive ratio will run)
          SET D(0)  = -987.987;
          SET E(0)  = -987.987;
          ON ^Fan ---> S2
  S2,
      #Z4: SET D(G) = H; SET E(G) = 44; ADD G; SET D(G) = -987.987; SET E(G) = -987.987;
           SET A(18) = X; Z1; ADD A(6);
           IF A(18) = -1 [@PR, @FR]
           @PR: ---> S3
           @FR: SET A(17) = 300 ---> S3
  S3,
      A(2)*6000#T: IF S.S.4 = 1 [@SWITCH, @WAIT]
                   @SWITCH: Z3; SET D(G) = H; SET E(G) = 45; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S4
                   @WAIT: ---> S5 \wait for post-infusion timeout to complete
  S4,
      A(3)*6000#T: IF A(6) >= A(1) [@END, @NOEND]
                   @END: SET A(7) = 1 ---> S6
                   @NOEND: Z1; ADD A(6); SET D(G) = H; SET E(G) = 44; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
  S5,  \wait for post-infusion timeout to finish
     .01": IF S.S.4 = 1 [@SWITCH, @WAIT]
           @SWITCH: Z3; SET D(G) = H; SET E(G) = 45; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S4
           @WAIT: ---> S5
  S6,
     1": ---> SX





S.S.2,  \ Individual active and inactive presses and FR or PR
  S1,
    #START: ---> S2
  S2,
    1#R^RightLeverIn: SET D(G) = H; SET E(G) = 48; ADD G, A(32), A(21); SET D(G) = -987.987; SET E(G) = -987.987;
                      IF A(0) = 0 [@RIGHT, @LEFT]
                      @RIGHT: Z^ActivePress_TTL ---> SX
                      @LEFT: Z^InactivePress_TTL ---> SX
    1#R^LeftLeverIn: SET D(G) = H; SET E(G) = 49; ADD G, A(33), A(13); SET D(G) = -987.987; SET E(G) = -987.987;
                     IF A(0) = 0 [@RIGHT, @LEFT]
                     @RIGHT: Z^InactivePress_TTL ---> SX
                     @LEFT: Z^ActivePress_TTL ---> SX
    #Z4: ---> S3
  S3,
    #Z1: IF A(18) = -1 [@PR, @FR]
         @PR: SET A(19) = X; LIST X = B(C(0)); SET U = X, F = X;
              IF A(0) = 0 [@RIGHT, @LEFT]
              @RIGHT: ---> S5
              @LEFT:  ---> S4
         @FR: SET U = X, F = X;
              IF A(0) = 0 [@RIGHT, @LEFT]
              @RIGHT: ---> S5
              @LEFT:  ---> S4
  S4,
    1#R^LeftLeverIn: Z^ActivePress_TTL;
                     SET D(G) = H; SET E(G) = 4; ADD G, A(11); SET D(G) = -987.987; SET E(G) = -987.987;
                     SUB U;
                     IF U <= 0 [@FRDONE, @FRNOTDONE]
                     @FRDONE: Z2 ---> S3
                     @FRNOTDONE: ---> S4
    1#R^RightLeverIn: Z^InactivePress_TTL; SET D(G) = H; SET E(G) = 8; ADD G, A(12); SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
    A(17)*6000#T: SET A(20) = A(19); SET A(7) = 1 ---> S6
    #Z3: ---> S3
  S5,
    1#R^RightLeverIn: Z^ActivePress_TTL;
                      SET D(G) = H; SET E(G) = 3; ADD G, A(10); SET D(G) = -987.987; SET E(G) = -987.987;
                      SUB F;
                      IF F <= 0 [@FRDONE, @FRNOTDONE]
                      @FRDONE: Z2 ---> S3
                      @FRNOTDONE: ---> S5
    1#R^LeftLeverIn: Z^InactivePress_TTL; SET D(G) = H; SET E(G) = 9; ADD G, A(13); SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
    A(17)*6000#T: SET A(20) = A(19); SET A(7) = 1 ---> S6
    #Z3: ---> S3
  S6,
    1": ---> SX





S.S.3,  \ Post reward, time-out and No-drug period presses
  S1,
    #Z2: ---> S2
    #Z3: ---> S3
  S2,
    1#R^RightLeverIn: SET D(G) = H; SET E(G) = 34; ADD G, A(12); SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
    1#R^LeftLeverIn: SET D(G) = H; SET E(G) = 35; ADD G, A(13); SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
    #Z1: ---> S1
    #Z3: ---> S3
  S3,     \ No-drug period
    1#R^RightLeverIn: SET D(G) = H; SET E(G) = 36; ADD G, A(12); SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
    1#R^LeftLeverIn: SET D(G) = H; SET E(G) = 37; ADD G, A(13); SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
    #Z1: ---> S1





S.S.4,  \ Infusion
  S1,
    #Z2: IF A(4) = 0 [@NOINFUSION, @INFUSION]
         @NOINFUSION: ---> S5
         @INFUSION: ---> S2
  S2,
    0.01": SET D(G) = H; SET E(G) = 5; ADD G, Y; SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
  S3,
    A(4)*100#T: Z^MissedDrugInfusion_TTL;
                SET D(G) = H; SET E(G) = 6; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S4
  S4,
   ((A(5)*100)-A(4)*100)#T: Z1 ---> S1
  S5,
    0.03": ---> S6
  S6,
    (A(5)*100)#T: Z1 ---> S1






S.S.5,  \ Head entry detector
  S1,
    #START: IF A(34) = 1 [@HEADENTRY, @NOHEADENTRY]
            @HEADENTRY: ---> S2
            @NOHEADENTRY: ---> SX
  S2,
    1#R^HeadEntry: SET D(G) = H; SET E(G) = 7; ADD G, A(16); SET D(G) = -987.987; SET E(G) = -987.987 ---> SX





S.S.6,  \ House light
  S1,
    #START: IF A(35) = 0 [@PREHLOFF, @PREHLON]
            @PREHLOFF: OFF ^HouseLight; SET D(G) = H; SET E(G) = 43; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
            @PREHLON: ON ^HouseLight; SET D(G) = H; SET E(G) = 42; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
    #Z1: IF A(29) = 0 [@DRUGHLOFF, @DRUGHLON]
         @DRUGHLOFF: OFF ^HouseLight; SET D(G) = H; SET E(G) = 43; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
         @DRUGHLON: ON ^HouseLight; SET D(G) = H; SET E(G) = 42; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
    #Z3: IF A(30) = 0 [@NODRUGHLOFF, @NODRUGHLON]
         @NODRUGHLOFF: OFF ^HouseLight; SET D(G) = H; SET E(G) = 43; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
         @NODRUGHLON: ON ^HouseLight; SET D(G) = H; SET E(G) = 42; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX





S.S.7,   \ Lever Cue lights (in pre-session, at start, and in response to reward signal, ie. completing FR)
  S1,
    #START: IF A(0) = 0 [@PRERIGHT, @PRELEFT]
            @PRERIGHT: ON ^RightCueLight; OFF ^LeftCueLight;
                       SET D(G) = H; SET E(G) = 38; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
            @PRELEFT:  ON ^LeftCueLight; OFF ^RightCueLight;
                       SET D(G) = H; SET E(G) = 39; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
    #Z4: IF A(0) = 0 [@STARTRIGHT, @STARTLEFT]
         @STARTRIGHT: OFF ^RightCueLight;
                      SET D(G) = H; SET E(G) = 40; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
         @STARTLEFT:  OFF ^LeftCueLight;
                      SET D(G) = H; SET E(G) = 41; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
  S2,
    #Z2: IF A(0) = 0 [@RIGHT, @LEFT]
         @RIGHT: ON ^RightCueLight; OFF ^LeftCueLight;
                 SET D(G) = H; SET E(G) = 38; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
         @LEFT:  ON ^LeftCueLight; OFF ^RightCueLight;
                 SET D(G) = H; SET E(G) = 39; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S3
  S3,
    #Z1: IF A(0) = 0 [@RIGHT, @LEFT]
         @RIGHT: OFF ^RightCueLight; SET D(G) = H; SET E(G) = 40; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
         @LEFT:  OFF ^LeftCueLight; SET D(G) = H; SET E(G) = 41; ADD G; SET D(G) = -987.987; SET E(G) = -987.987  ---> S2
    #Z3: IF A(0) = 0 [@RIGHT, @LEFT]
         @RIGHT: OFF ^RightCueLight; SET D(G) = H; SET E(G) = 40; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> SX
         @LEFT:  OFF ^LeftCueLight; SET D(G) = H; SET E(G) = 41; ADD G; SET D(G) = -987.987; SET E(G) = -987.987  ---> SX






S.S.8,   \ Levers extend
  S1,
    #START: ON ^RightLeverOut, ^LeftLeverOut;
            SET D(G) = H; SET E(G) = 10; ADD G; SET D(G) = -987.987; SET E(G) = -987.987;
            SET D(G) = H; SET E(G) = 11; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
  S2,
    #START: ---> SX






S.S.9,  \ Display
  S1,
    #START: ---> S2
  S2,
    .5": SHOW 1, INFUSIONS: , Y;
         SHOW 2, ACTIVE RIGHT: , A(21);
         SHOW 3, INACTIVE LEFT: , A(13);
         SHOW 9, DRUG RIGHT PRESS: , A(21);
         SHOW 10, DRUG LEFT PRESS: , A(22);
         SHOW 11, NODRUG RIGHT PRESS: , A(23);
         SHOW 12, NODRUG LEFT PRESS: , A(24);
         SHOW 4, SESS DURATION(MIN): , A(25)/60;
         SHOW 15, PRE-SESSION RIGHT PRESS: , A(32);
         SHOW 16, PRE-SESSION LEFT PRESS: , A(33);
         IF A(34) = 1 [@HEADENTRIES, @NOHEADENTRIES]
         @HEADENTRIES: SHOW 6, FOOD TRAY HEAD ENT: , A(16) ---> S2
         @NOHEADENTRIES: ---> S2





S.S.10,  \ Drug and no-drug period countdown
  S1,
    #Z4: SET A(14) = A(2)*60; SHOW 7, DRUG PERIOD SEC: , A(14) ---> S2
  S2,
    1": SUB A(14); IF A(14) < 0 [@NOMARK, @MARK]
        @NOMARK: ---> S2
        @MARK: SHOW 7, DRUG PERIOD SEC: , A(14) ---> S2
    #Z3: SET A(14) = A(3)*60; SHOW 7, NO-DRUG PERIOD SEC: , A(14) ---> S3
  S3,
    1": SUB A(14); IF A(14) < 0 [@NOMARK, @MARK]
        @NOMARK: ---> S3
        @MARK: SHOW 7, NO-DRUG PERIOD SEC: , A(14) ---> S3
    #Z1: SET A(14) = A(2)*60; SHOW 7, DRUG PERIOD SEC: , A(14) ---> S2





S.S.11,  \ Session and pre-session time display
  S1,
    #START: ---> S2
  S2,
    1": ADD A(25); SHOW 14, PRE-SESS TIME(SEC): , A(25) ---> S2
    #Z4: SET A(25) = 0 ---> S3
  S3,
    1": ADD A(25); SHOW 14, SESS DURATION(MIN): , A(25)/60 ---> S3





S.S.12,  \ Drug and no-drug period presses
  S1,
    #Z4: ---> S2
  S2,
    #Z3: ---> S3
    1#R^RightLeverIn: ADD A(21) ---> SX
    1#R^LeftLeverIn: ADD A(22) ---> SX
  S3,
    #Z1: ---> S2
    1#R^RightLeverIn: ADD A(23) ---> SX
    1#R^LeftLeverIn: ADD A(24) ---> SX





S.S.13,  \ Pre-session cue period timer
  S1,
    #START: Z^StartSession_TTL;
            SET D(G) = H; SET E(G) = 46; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S2
  S2,
    A(31)*100#T: Z4; SET D(G) = H; SET E(G) = 47; ADD G; SET D(G) = -987.987; SET E(G) = -987.987 ---> S1




S.S.14,  \ Session timer and termination
  S1,
    #START: ---> S2
  S2,
    0.01": ADD H;
           IF (A(7) = 0) AND (H <= ((A(15)*360000)+(A(31)*100))) AND (Y < A(28)) [@NOEND, @YESEND]
           @NOEND: ---> SX
           @YESEND: Z^EndSession_TTL;
                    SET D(G) = H, E(G) = 100; SET D(G+1) = -987.987, E(G+1) = -987.987;
                    SHOW 1, INFUSIONS: , Y;
                    SHOW 2, ACTIVE RIGHT: , A(21);
                    SHOW 3, INACTIVE LEFT: , A(13);
                    SHOW 9, DRUG RIGHT PRESS: , A(21);
                    SHOW 10, DRUG LEFT PRESS: , A(22);
                    SHOW 11, NODRUG RIGHT PRESS: , A(23);
                    SHOW 12, NODRUG LEFT PRESS: , A(24);
                    SHOW 4, SESS DURATION(MIN): , A(25)/60;
                    SHOW 15, PRE-SESSION RIGHT PRESS: , A(32);
                    SHOW 16, PRE-SESSION LEFT PRESS: , A(33);
                    IF A(34) = 1 [@HEADENTRIES, @NOHEADENTRIES]
                    @HEADENTRIES: SHOW 6, FOOD TRAY HEAD ENT: , A(16) ---> STOPABORTFLUSH
                    @NOHEADENTRIES:  ---> STOPABORTFLUSH





\TTLs
S.S.17,
  S1,
    #Z^StartSession_TTL: ON ^StartSession_TTL ---> S2
  S2,
    0.1": OFF ^StartSession_TTL ---> S1



S.S.20,
  S1,
    #Z^ActivePress_TTL: ON ^ActivePress_TTL ---> S2
  S2,
    0.1": OFF ^ActivePress_TTL ---> S1



S.S.21,
  S1,
    #Z^InactivePress_TTL: ON ^InactivePress_TTL ---> S2
  S2,
    0.1": OFF ^InactivePress_TTL ---> S1



S.S.22,
  S1,
    #Z^MissedDrugInfusion_TTL: ON ^MissedDrugInfusion_TTL ---> S2
  S2,
    0.1": OFF ^MissedDrugInfusion_TTL ---> S1



S.S.23,
  S1,
    #Z^EndSession_TTL: ON ^EndSession_TTL ---> S2
  S2,
    0.1": OFF ^EndSession_TTL ---> S1
